PsychoPy2experiment version="1.85.0rc5"
Settings
  Monitor = testMonitor
  color = black
  Experiment info = {u'participant': u'', u'scanner': u'0'}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  expName = reversal_exp1_v2.0MB
  Screen = 1
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Routines
  Routine begin_task
    TextComponent break_text_2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        The practice session is complete... now you will begin the real task.

        Please do your best!

        Press space to continue
    CodeComponent break_code_2
      End Routine:
        expClock.reset()
    KeyboardComponent break_resp_2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine baseline
  Routine fixation
    TextComponent init_fixation
      color = black
      text = +
      stopVal [duration (s)] = 0.3
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    CodeComponent fix_code
      Begin Routine:
        # Records the fixation onset time for each trial to output
        trials.addData('FixOnset', expClock.getTime())
  Routine practice
    ImageComponent ISI_BG_2
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.6
      startVal [time (s)] = 0.0
      size = (2,2)
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    ImageComponent background_2
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      image [set during: practice.ISI_2] = $trial_background
      size = (2, 2)
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    TextComponent fix_all_2
      text = +
      stopVal [duration (s)] = $fix_dur
      startVal [time (s)] = 0
      letterHeight = 0.3
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    ImageComponent darth_fractals_2
      opacity [set during: practice.ISI_2] = stim_opacity
      stopVal [duration (s)] = 1.0
      pos = [0, 0.25]
      startVal [time (s)] = 0.8
      image [set during: practice.ISI_2] = $stim
      size = (1, 1)
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    PolygonComponent resp
      opacity [set during: practice.ISI_2] = opacity_1
      fillColor [set every frame] = $color_1
      stopVal [duration (s)] = 1.7
      pos = (-0.75, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_5
      opacity [set during: practice.ISI_2] = opacity_2
      fillColor [set every frame] = $color_2
      stopVal [duration (s)] = 1.7
      pos = (-0.25, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_6
      opacity [set during: practice.ISI_2] = opacity_3
      fillColor [set every frame] = $color_3
      stopVal [duration (s)] = 1.7
      pos = (0.25, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_7
      opacity [set during: practice.ISI_2] = opacity_4
      fillColor [set every frame] = $color_4
      stopVal [duration (s)] = 1.7
      pos = (0.75, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    StaticComponent ISI_2
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent trial_resp_2
      stopVal [duration (s)] = .7
      forceEndRoutine = False
      allowedKeys = '1','2','3','4','0'
      startVal [time (s)] = 1.8
      store = first key
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    TextComponent cue_2
      text = Go!
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 1.8
      letterHeight = 0.4
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    CodeComponent practice_code
      Begin Experiment:
        import os
        import numpy as np
        from numpy.random import random, randint, normal, shuffle
        from math import ceil
        from glob import glob

        # Relative pathway for fractal images
        # Used relative pathway for easy hand-off of script to multiple computers
        fractal_stims = glob(os.getcwd() + '/fractal_img/*png')

        # Use the first 8 fractal images in the folder
        practice_stims = fractal_stims[:4]

        # Randomized response map for Run #1 of each stim set
        # Number indicate button position
        # Indice of resp_map1 array represents the stimulus (1-4)
        prac_resp_map = np.random.permutation([0, 1, 2, 3])

        trialbox_color = 'gray'
        # Preset response box color and stim_opacity
        color_1 = color_2 = color_3 = color_4 = trialbox_color
        stim_opacity = 0
      Begin Routine:
        # Important -- use of a scheduler has made 'runs' and 'run' somewhat confusing
        # Setup 2 'runs' per execution of the experiment, similar to the wmaze

        # See 'Each Frame' tab
        exec_run = False

        # BASELINE TRIALS

        # Select a random number 1-4
        if stim_type == -1:
            # Make the random static image
            trial_background = (np.random.rand(1200, 800) > 0.85) * 1
            # No stim for BL trials
            stim = practice_stims[0]
            stim_opacity = 0
            fix_dur = 1.8
            curr_corr = np.random.randint(1,5)
            # Set all response box opacities to 0.55 (white)
            opacity_1 = opacity_2 = opacity_3 = opacity_4 = 0.55
            color_1 = color_2 = color_3 = color_4 = 'white'
            # Set the random response box's opacity value to 0.65
            exec('opacity_{0} = 0.65'.format(curr_corr))



        # TASK TRIALS
        else:
            # The correct response for the current trial
            curr_corr = prac_resp_map[stim_type] + 1
            # Set the trial background image to be entirely black
            trial_background = np.ones((1200,800)) * 0.5
            # Present current stimulus in the set
            stim = practice_stims[stim_type]
            # Set stimulus opacity to solid
            stim_opacity = 1
            fix_dur = 1.3
            # Set opacity of all response boxes to solid (1)
            opacity_1 = opacity_2 = opacity_3 = opacity_4 = 1
            # Inside response box color will be black (line will be white)
            color_1 = color_2 = color_3 = color_4 = trialbox_color
      End Routine:
        # Setting up the feedback response text colors
        # If the response is correct, use green font
        if trial_resp_2.keys == str(curr_corr):
            fb_color = 'teal'
            fb_txt = 'Yes'
        # If the response is not correct, use red font
        elif trial_resp_2.keys == None:
            fb_color = 'white'
            fb_txt = '?'
        else:
            fb_color = 'salmon'
            fb_txt = 'No'

        color_1 = color_2 = color_3 = color_4 = trialbox_color

        if trial_resp_2.keys == str(curr_corr):
            trial_acc = 1
        else:
            trial_acc = 0

        # End practice
        if trial_resp_2.keys == "0":
            practice_runs.finished = True
      Each Frame:
        # If the participant provides a response
        # exec_run is used to avoid resetting the color after the key press
        if len(trial_resp_2.keys) != 0 and exec_run == False:
            # Save the corresponding box as which_box
            which_box = trial_resp_2.keys[0]
            # Execute the format function for the color fill of the selected box
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
  Routine stim_break
    TextComponent break_text_3
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Good job! Take a moment to relax.

        When you are ready to continue, please press the space key to start the next section.
    CodeComponent break_code_3
      Begin Routine:
        current_run = 'run_2'
        run = 1
      End Routine:
        expClock.reset()
    KeyboardComponent break_resp_3
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine run_break
    TextComponent break_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Break time! Relax for a bit.

        Press the space key to start Part 2.
    CodeComponent break_code
      Begin Routine:
        current_run = 'run_2'
        run = 1
      End Routine:
        expClock.reset()
    KeyboardComponent break_resp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine trial
    ImageComponent ISI_BG
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.6
      startVal [time (s)] = 0.0
      size = (2,2)
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    ImageComponent background
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      image [set during: trial.ISI] = $trial_background
      size = (2, 2)
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    TextComponent fix_all
      text = +
      stopVal [duration (s)] = $fix_dur
      startVal [time (s)] = 0
      letterHeight = 0.3
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    ImageComponent darth_fractals
      opacity [set during: trial.ISI] = stim_opacity
      stopVal [duration (s)] = 1.0
      pos = [0, 0.25]
      startVal [time (s)] = 0.8
      image [set during: trial.ISI] = $stim
      size = (1, 1)
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    PolygonComponent resp_1
      opacity [set during: trial.ISI] = opacity_1
      fillColor [set every frame] = $color_1
      stopVal [duration (s)] = 1.7
      pos = (-0.75, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_2
      opacity [set during: trial.ISI] = opacity_2
      fillColor [set every frame] = $color_2
      stopVal [duration (s)] = 1.7
      pos = (-0.25, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_3
      opacity [set during: trial.ISI] = opacity_3
      fillColor [set every frame] = $color_3
      stopVal [duration (s)] = 1.7
      pos = (0.25, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    PolygonComponent resp_4
      opacity [set during: trial.ISI] = opacity_4
      fillColor [set every frame] = $color_4
      stopVal [duration (s)] = 1.7
      pos = (0.75, -0.55)
      lineColor = black
      startVal [time (s)] = 0.8
      size = (0.25, 0.25)
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    KeyboardComponent trial_resp
      stopVal [duration (s)] = .7
      forceEndRoutine = False
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 1.8
      store = first key
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    TextComponent cue
      text = Go!
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 1.8
      letterHeight = 0.4
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    CodeComponent trial_code
      Begin Experiment:
        import os
        import numpy as np
        from numpy.random import random, randint, normal, shuffle
        from math import ceil
        from glob import glob

        # Relative pathway for fractal images
        # Used relative pathway for easy hand-off of script to multiple computers
        fractal_stims = glob(os.getcwd() + '/fractal_img/*png')

        trialbox_color = 'gray'
        # Preset response box color and stim_opacity
        color_1 = color_2 = color_3 = color_4 = trialbox_color
        stim_opacity = 0

        bl_dict = {'talpha': 0.3, 'falpha': 0.2, 'bl_hist': []}
      Begin Routine:
        # Important -- use of a scheduler has made 'runs' and 'run' somewhat confusing
        # Setup 2 'runs' per execution of the experiment, similar to the wmaze

        runs = eval(current_run)
        # Add the stimulus onset time
        # Using the beginning of the trial fixation as reference (ISI + Fixation = 2.3)
        runs.addData("StimOnset", expClock.getTime() + 2.3)
        # See 'Each Frame' tab
        exec_run = False


        # BASELINE TRIALS

        # Select a random number 1-4
        if stim_type == -1:
            # Make the random static image
            trial_background = (np.random.rand(1200, 800) > 0.85) * 1
            # No stim for BL trials
            stim = fractal_stims[0]
            stim_opacity = 0
            fix_dur = 1.8
            curr_corr = np.random.randint(1,5)
            # Set all response box opacities to falpha
            opacity_1 = opacity_2 = opacity_3 = opacity_4 = 0.35 + bl_dict['falpha']
            color_1 = color_2 = color_3 = color_4 = 'white'
            # Set the random response box's opacity value to 0.65
            exec('opacity_{0} = 0.35 + bl_dict["talpha"]'.format(curr_corr))
            # Record fractal image as "not applicable'
            runs.addData('fract_img', 'NA')


        # TASK TRIALS
        else:
            # If the run is an odd number (first run in the set)
            if run == 0:
                # The correct response for the current trial
                curr_corr = resp_map1[stim_type] + 1
            # In the run is an even number (second run in the set)
            else:
                # The correct response for the current trial
                curr_corr = resp_map2[stim_type] + 1
            # Set the trial background image to be entirely black
            trial_background = np.ones((1200,800)) * 0.5
            # Present current stimulus in the set
            stim = fractal_stims[stim_type]
            # Set stimulus opacity to solid
            stim_opacity = 1
            fix_dur = 1.3
            # Set opacity of all response boxes to solid (1)
            opacity_1 = opacity_2 = opacity_3 = opacity_4 = 1
            # Inside response box color will be black (line will be white)
            color_1 = color_2 = color_3 = color_4 = trialbox_color
            # Record which fractal image was presented per trial
            runs.addData('fract_img', fractal_stims[stim_type][-12:])

        # Record the correct response for each trial (either baseline and task)
        runs.addData('correct', curr_corr)
      End Routine:
        # Setting up the feedback response text colors
        # If the response is correct, use green font
        if trial_resp.keys == str(curr_corr):
            fb_color = 'teal'
            fb_txt = 'Yes'
        # If the response is not correct, use red font
        elif trial_resp.keys == None:
            fb_color = 'white'
            fb_txt = '?'
        else:
            fb_color = 'salmon'
            fb_txt = 'No'

        color_1 = color_2 = color_3 = color_4 = trialbox_color

        if trial_resp.keys == str(curr_corr):
            trial_acc = 1
            bl_dict['bl_hist'].append(1)
            if len(bl_dict['bl_hist']) == 9:
                bl_dict['bl_hist'].pop(0)
            if sum(bl_dict['bl_hist']) > 7:
                bl_dict['talpha'] == bl_dict['talpha'] * 0.9
            elif sum(bl_dict['bl_hist']) < 5:
                bl_dict['talpha'] == bl_dict['talpha'] * 1.1
            if bl_dict['talpha'] <= bl_dict['falpha']:
                bl_dict['talpha'] == bl_dict['falpha'] + 0.05
        else:
            trial_acc = 0
            bl_dict['bl_hist'].append(1)
            if len(bl_dict['bl_hist']) == 9:
                bl_dict['bl_hist'].pop(0)
            if sum(bl_dict['bl_hist']) > 7:
                bl_dict['talpha'] == bl_dict['talpha'] * 0.9
            elif sum(bl_dict['bl_hist']) < 5:
                bl_dict['talpha'] == bl_dict['talpha'] * 1.1
            if bl_dict['talpha'] <= bl_dict['falpha']:
                bl_dict['talpha'] == bl_dict['falpha'] + 0.05
        runs.addData('trial_acc', trial_acc)
      Each Frame:
        # If the participant provides a response
        # exec_run is used to avoid resetting the color after the key press
        if len(trial_resp.keys) != 0 and exec_run == False:
            # Save the corresponding box as which_box
            which_box = trial_resp.keys[0]
            # Execute the format function for the color fill of the selected box
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
  Routine goodbye
    TextComponent goodbye_text
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for your participation!

        You are finished and may now leave.
    KeyboardComponent goodbye_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine instructions
    ImageComponent instruct_bg
      color = $[-0.5,-0.5,-0.5]
      startVal [time (s)] = 0.0
      size = (2,2)
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    TextComponent instruct_text
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text [set every repeat]:
        ﻿
        You will be presented with 8 unique images over multiple trials. Your job is to determine which of the 4 boxes corresponds to each of the presented image. You will use the number keys [1], [2], [3], and [4] to select the boxes. Two images will be associated with each box. At the beginning of each trial, a fixation cross will let you know one of the images is about to appear. The image will last for one second, and then disappear. A “Go” message will let you know when to respond. Please provide your answer as quickly and accurately as possible. You will receive a “Yes” or “No” message to let you know if you selected the correct or incorrect answer. If you don’t response in time, a “?” will appear.

        Occasionally you will receive a second kind of trial with a static background image, and 4 slightly transparent squares. You should select the brightest of the squares using the number keys as before.

        Please press the space key to begin the experiment…
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent intruct_code
      Begin Experiment:
        # Begins the experiment clock
        expClock = core.Clock()
        '''
        # SCANNER SESSION
        if expInfo['scanner'] == 1:
            wait_screen = 'Waiting for scanner to start...'
        # BEHAVIORAL SESSION
        else:
            wait_screen = '﻿﻿Please press the space key to begin the experiment…'
        '''
        current_run = 'run_1'
        run = 0
      End Routine:
        # Resets the experiment clock at the end of the instructions routine
        expClock.reset()
  Routine stim_prep
    CodeComponent stim_prep_code
      Begin Experiment:
        #fractal_stims

        all_stim_sets = []
        # Create new stim set for each stim_set_loop iteration
        for set in range(4):
            fract_stimset = fractal_stims[4 + set:36:4]
            print(len(fract_stimset))
            all_stim_sets.append(fract_stimset)
      Begin Routine:
        current_run = 'run_1'
        run = 0

        # Selects the present loop's stim set from all_stim_set
        fractal_stims = all_stim_sets[loop_num]

        # Create array containing multiple subarrays for near and far response remapping
        near_fars = [['near', 'far'], ['near', 'far'], ['near', 'far'], ['near', 'far']]
        # Randomized response map for Run #1 of each stim set
        # Number indicate button position
        # Indice of resp_map1 array represents the stimulus (1-8)
        resp_map1 = np.random.permutation([0, 0, 1, 1, 2, 2, 3, 3])
        # Empty array to hold new response map for Run #2
        resp_map2 = []
        # For the current
        for run1_resp in resp_map1:
            # Using Run #1 response to get the nears and fars
            # Want only 1 near and 1 far for each Run #1 response
            choices = near_fars[run1_resp]
            # Chooses whether Run 2 response will become near or far
            near_far = choices.pop(np.random.randint(0, len(choices)))
            # Make sure run2_resp was defined in the outer stack
            run2_resp = -1

            # [0, 1, 2, 3] --> near[1,2]far[2,3]; near[1,2]far[0,1]
            # [0, 1, 2, 3] --> near[1,0]far[2,3]; near[3,2]far[0,1]

            # Run #1 -->#2 remapping:
            if run1_resp <= 1:
                # Near 0: R1 --> R2
                if near_far == 'near' and run1_resp == 0:
                    run2_resp = run1_resp + 1
                # Far 0: R1 --> R3
                elif near_far == 'far' and run1_resp == 0:
                    run2_resp = run1_resp + 2
                # Near 1: R2 --> R1
                elif near_far == 'near' and run1_resp == 1:
                    run2_resp = run1_resp - 1
                # Far 1: R2 --> R4
                else:
                    run2_resp = run1_resp + 2

            # [0, 1, 2, 3]
            # Run #1 -->#2 remapping:
            else:
                # Near 2: R3 --> R4
                if near_far == 'near' and run1_resp == 2:
                    run2_resp = run1_resp + 1
                # Far 2: R3 --> R1
                elif near_far == 'far' and run1_resp == 2:
                    run2_resp = run1_resp - 2
                # Near 3: R4 --> R3
                elif near_far == 'near' and run1_resp == 3:
                    run2_resp = run1_resp - 1
                # Far 3: R4 --> R2
                else:
                    run2_resp = run1_resp - 2
            # Store the Run #2 response mapping in resp_map2 array
            resp_map2.append(run2_resp)
        # Record the response map for Run #1
        expInfo['resp_map1_{0}'.format(loop_num)] = resp_map1
        # Record the response map for Run #2
        expInfo['resp_map2_{0}'.format(loop_num)] = resp_map2
    TextComponent text
      stopVal [duration (s)] = 0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine feedback
    ImageComponent fb_bg
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      size = (2,2)
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    TextComponent feedback_text
      color [set every repeat] = $fb_color
      text [set every repeat] = $fb_txt
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0
      letterHeight = 0.5
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Flow
  Routine instructions
  LoopInitiator practice_runs loopType="TrialHandler"
    conditionsFile = practice_schedule.xlsx
    loopType = random
    nReps = 0
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    conditions:
      [{'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': -1},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 0},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 1},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 2},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3},
      {'stim_type': 3}]
    Routine practice
    Routine feedback
  LoopTerminator practice_runs
  Routine begin_task
  LoopInitiator stim_set_loop loopType="TrialHandler"
    conditionsFile = loop_schedule.xlsx
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'loop_num': 0},
      {'loop_num': 1},
      {'loop_num': 2},
      {'loop_num': 3}]
    Routine stim_prep
    LoopInitiator run_1 loopType="TrialHandler"
      conditionsFile = stimulus_schedule.xlsx
      loopType = random
      nReps = 1
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      conditions:
        [{'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': -1},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 0},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1},
        {'stim_type': 1}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
      Routine trial
      Routine feedback
    LoopTerminator run_1
    Routine run_break
    LoopInitiator run_2 loopType="TrialHandler"
      conditionsFile = stimulus_schedule.xlsx
      loopType = random
      nReps = 1
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      conditions:
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      Routine trial
      Routine feedback
    LoopTerminator run_2
    Routine stim_break
  LoopTerminator stim_set_loop
  Routine goodbye
