PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = WordRatingTask
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    TextComponent word_present
      text [set every repeat] = $Word
      startVal [time (s)] = 0.0
      letterHeight = .2
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    RatingScaleComponent rating
      labels = Not At All, Very
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
      scaleDescription = 1= Not at all, 5= Very
      categoryChoices = 1, 2, 3, 4, 5
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  Routine space
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine Goodbye
    TextComponent goodbye1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for participating in our experiment.

        If you are completing this with another participant, please sit quietly until they are finished.
    KeyboardComponent exit_key
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent instructions1
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Some words have the ability to remind us about ourselves and our day-to-day life, and these are known as “self-referencing” words.
        In this experiment, you will be asked to rate 800 individual words on the following scale according to how “self- referencing” you believe most people would find each word:

         1 = “Not At All” to 5 = “Very”

        Use the mouse to select your answer on the sliding response scale then confirm your response by clicking the button below.

        Please hit the space bar when you are ready to begin.
    KeyboardComponent key_space
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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Flow
  Routine Instructions
  LoopInitiator word_loop loopType="TrialHandler"
    conditionsFile = Wordlistexcel.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Word': u'Mother', u'Word_Type': u'Noun', u'Word_ID': 1},
      {u'Word': u'Father', u'Word_Type': u'Noun', u'Word_ID': 2},
      {u'Word': u'Sister', u'Word_Type': u'Noun', u'Word_ID': 3},
      {u'Word': u'Brother', u'Word_Type': u'Noun', u'Word_ID': 4},
      {u'Word': u'Aunt', u'Word_Type': u'Noun', u'Word_ID': 5},
      {u'Word': u'Uncle', u'Word_Type': u'Noun', u'Word_ID': 6},
      {u'Word': u'Cousin', u'Word_Type': u'Noun', u'Word_ID': 7},
      {u'Word': u'Grandmother', u'Word_Type': u'Noun', u'Word_ID': 8},
      {u'Word': u'Grandfather', u'Word_Type': u'Noun', u'Word_ID': 9},
      {u'Word': u'Apartment', u'Word_Type': u'Noun', u'Word_ID': 10},
      {u'Word': u'Knee', u'Word_Type': u'Noun', u'Word_ID': 11},
      {u'Word': u'Wrist', u'Word_Type': u'Noun', u'Word_ID': 12},
      {u'Word': u'Elbow', u'Word_Type': u'Noun', u'Word_ID': 13},
      {u'Word': u'Heel', u'Word_Type': u'Noun', u'Word_ID': 14},
      {u'Word': u'Chest', u'Word_Type': u'Noun', u'Word_ID': 15},
      {u'Word': u'Car', u'Word_Type': u'Noun', u'Word_ID': 16},
      {u'Word': u'Bath', u'Word_Type': u'Noun', u'Word_ID': 17},
      {u'Word': u'Kitchen', u'Word_Type': u'Noun', u'Word_ID': 18},
      {u'Word': u'Coffee', u'Word_Type': u'Noun', u'Word_ID': 19},
      {u'Word': u'Friend', u'Word_Type': u'Noun', u'Word_ID': 20},
      {u'Word': u'Cereal', u'Word_Type': u'Noun', u'Word_ID': 21},
      {u'Word': u'Dinner', u'Word_Type': u'Noun', u'Word_ID': 22},
      {u'Word': u'Laundry', u'Word_Type': u'Noun', u'Word_ID': 23},
      {u'Word': u'Shower', u'Word_Type': u'Noun', u'Word_ID': 24},
      {u'Word': u'Shirt', u'Word_Type': u'Noun', u'Word_ID': 25}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
    Routine trial
  LoopTerminator word_loop
  Routine Goodbye
