PsychoPy2experiment version="1.82.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  expName = WordRatingTask
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine trial
    TextComponent word_present
      text [set every repeat] = $Word
      startVal [time (s)] = 0.0
      letterHeight = .2
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    RatingScaleComponent rating
      labels = Not At All, Very
      pos = 0, -0.4
      high = 5
      startVal [time (s)] = 0.0
      size = 1.5
      forceEndRoutine = True
      low = 1
      scaleDescription = 1= Not at all, 5= Very
      categoryChoices = 1, 2, 3, 4, 5
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  Routine Instructions
    TextComponent instructions1
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Some words have the ability to remind us about ourselves and our day-to-day life, and these are known as “self-referencing” words.
        In this experiment, you will be asked to rate 800 individual words on the following scale according to how “self- referencing” you believe most people would find each word:

         1 = “Not At All” to 5 = “Very”

        Use the mouse to select your answer on the sliding response scale then confirm your response by clicking the button below.

        Please hit the space bar when you are ready to begin.
    KeyboardComponent key_space
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Goodbye
    TextComponent goodbye1
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for participating in our experiment.

        If you are completing this with another participant, please sit quietly until they are finished.
    KeyboardComponent exit_key
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
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  Routine space
    TextComponent text
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  Routine Instructions
  LoopInitiator word_loop loopType="TrialHandler"
    conditionsFile = KidWordList.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{u'Word': u'Was', u'Word_ID': 1},
      {u'Word': u'Going', u'Word_ID': 2},
      {u'Word': u'Home', u'Word_ID': 3},
      {u'Word': u'Our', u'Word_ID': 4},
      {u'Word': u'Coat', u'Word_ID': 5},
      {u'Word': u'Mother', u'Word_ID': 6},
      {u'Word': u'Father', u'Word_ID': 7},
      {u'Word': u'Myself', u'Word_ID': 8},
      {u'Word': u'Wonder', u'Word_ID': 9},
      {u'Word': u'Serious', u'Word_ID': 10},
      {u'Word': u'Aware', u'Word_ID': 11},
      {u'Word': u'Shy', u'Word_ID': 12},
      {u'Word': u'Wise', u'Word_ID': 13},
      {u'Word': u'Leader', u'Word_ID': 14},
      {u'Word': u'Personal', u'Word_ID': 15},
      {u'Word': u'Funny', u'Word_ID': 16},
      {u'Word': u'Frighten', u'Word_ID': 17},
      {u'Word': u'Enemy', u'Word_ID': 18},
      {u'Word': u'Happy', u'Word_ID': 19},
      {u'Word': u'Envy', u'Word_ID': 20},
      {u'Word': u'Sorry', u'Word_ID': 21},
      {u'Word': u'Haircut', u'Word_ID': 22},
      {u'Word': u'Homework', u'Word_ID': 23},
      {u'Word': u'Humans', u'Word_ID': 24},
      {u'Word': u'Everyone', u'Word_ID': 25},
      {u'Word': u'Friend', u'Word_ID': 26},
      {u'Word': u'Classroom', u'Word_ID': 27},
      {u'Word': u'Somebody', u'Word_ID': 28},
      {u'Word': u'Someday', u'Word_ID': 29},
      {u'Word': u'Wanted', u'Word_ID': 30},
      {u'Word': u'Grandmother', u'Word_ID': 31},
      {u'Word': u'Grandfather', u'Word_ID': 32},
      {u'Word': u'Troublemaker', u'Word_ID': 33},
      {u'Word': u'Playground', u'Word_ID': 34},
      {u'Word': u'Reasonable', u'Word_ID': 35},
      {u'Word': u'Me', u'Word_ID': 36},
      {u'Word': u'Leg', u'Word_ID': 37},
      {u'Word': u'Arm', u'Word_ID': 38},
      {u'Word': u'Milk', u'Word_ID': 39},
      {u'Word': u'Princess', u'Word_ID': 40},
      {u'Word': u'Sportsman', u'Word_ID': 41}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
    Routine trial
  LoopTerminator word_loop
  Routine Goodbye
