PsychoPy2experiment version="1.83.01"
Settings
  Data filename = u'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'version': u'0', u'participant': u'', u'schedule': u'1'}
  expName = SART_RTV
  Save excel file = True
  Units = use prefs
  Save log file = False
  Screen = 1
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Routines
  Routine Probe
    CodeComponent probe_code
      Begin Experiment:
        import random
      Begin Routine:
        #Load image pairs (self and non-self)
        #Randomize side on which each word type is displayed
        #Save which side Self word is displayed
        #Save which words are displayed

        i = random.randint(0, len(data_vals)-1)
        non_self = data_vals[i]["non_self"]
        super_self = data_vals[i]["super_self"]

        del data_vals[i]

        self_side = 1
        if random.random() >= .5:
            word1 = non_self
            word2 = super_self
            self_side = 2
        else:
            word1 = super_self
            word2 = non_self

        conditional_run.addData("self_side", self_side)
        conditional_run.addData("super_self", super_self)
        conditional_run.addData("non_self", non_self)
    KeyboardComponent probe_resp
      stopVal [duration (s)] = 4
      forceEndRoutine = True
      allowedKeys = '1', '2'
      startVal [time (s)] = 0.0
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    ImageComponent probe_image1
      stopVal [duration (s)] = 4.0
      pos = [-0.5, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $"./SART_RTV_images/" + word1 + ".jpg"
      size = [0.75, 0.75]
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    ImageComponent probe_image2
      stopVal [duration (s)] = 4.0
      pos = [0.5, 0]
      startVal [time (s)] = 0.0
      image [set every repeat] = $"./SART_RTV_images/" + word2 + ".jpg"
      size = [0.75, 0.75]
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  Routine Focus
    TextComponent Initial_fix
      color = black
      text = +
      stopVal [condition] = t >= intStim
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    CodeComponent code_2
      Begin Experiment:
        from random import randint

        intStim = 2
      Begin Routine:
        trials.addData('FixOnset', expClock.getTime())
      End Routine:
        blockLen = randint(4, 7)
        trials.addData('BlockLength', blockLen)
  Routine Data_Loader
    CodeComponent dl_code
      Begin Routine:
        from psychopy import data
        data_vals = data.importConditions("ImageList.xlsx")
  Routine trial
    CodeComponent trial_code
      Begin Experiment:
        from random import choice
        from numpy import average, std

        nonTarget=[1, 2, 4, 5, 6, 7, 8, 9]
        target=3
        prev_RT=[]
        curr_RT=[]
        test_var = "schedule_%s.xlsx"%expInfo['schedule']
      Begin Routine:
        #In a trial, load current digit.

        i = trials.thisTrialN
        if Schedule==1:
            stim = target
        else:
            stim = choice(nonTarget)
        trials.addData('StimOnset', expClock.getTime())
      End Routine:
        #At the end save whether inhibition trial or not.
        #At the end of each trial, compute current average and SD
        #Set the conditional value that determines if the probe task should initiate
        RTV_event = 0
        if stim==target:
            trials.addData('inhibition_trial', 1)
            if type(trial_resp.rt) is not float:
                trial_resp.rt = 0
                trial_resp.keys = None

        else:
            trials.addData('inhibition_trial', 0)

        if type(trial_resp.rt) is float and not stim==target:
            curr_RT.append(trial_resp.rt)
            if len(curr_RT) > 4:
                curr_RT = curr_RT[1:]
                curr_SD = std(curr_RT)
                prev_SD = std(prev_RT)
                if curr_SD > prev_SD*2 and trials.thisTrialN > 12:
                    RTV_event = 1
                    trials.addData('RTV_time', expClock.getTime())
            prev_RT.append(trial_resp.rt)
            if len(prev_RT) > 4:
                prev_RT = prev_RT[1:]

        if stim in nonTarget and trial_resp.keys=='1':
            hit,cr,com,omis=[1,0,0,0]
        elif stim in nonTarget and trial_resp.keys!='1':
            hit,cr,com,omis=[0,0,0,1]
        elif stim==target and trial_resp.keys=='1':
            hit,cr,com,omis=[0,0,1,0]
        elif stim==target and trial_resp.keys!='1':
            hit,cr,com,omis=[0,1,0,0]
        trials.addData('RTV', RTV_event)
        intStim = max(blockLen - t, 2)
        trials.addData('ForwardISI', intStim)
        trials.addData('hit', hit)
        trials.addData('cr', cr)
        trials.addData('com', com)
        trials.addData('omis', omis)
        trials.addData('stim', stim)
    TextComponent num_stim
      color = black
      text [set every repeat] = $stim
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    KeyboardComponent trial_resp
      stopVal [duration (s)] = 2
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Goodbye
    TextComponent goodbye_text
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for your participation!

        You are finished and may now leave.
    KeyboardComponent goodbye_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine Instructions
    TextComponent text
      wrapWidth = 1.5
      color = black
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Welcome to the task.

        Your job in this experiment is to hit the "space" key for every number that appears other than a "3".
        When a "3" appears, you will refrain from hitting the "space" key. Please respond as quickly and accurately as possible.

        Please press the space key when you are ready to begin.
    KeyboardComponent space_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code
      Begin Experiment:
        expClock = core.Clock()
      End Routine:
        expClock.reset()
Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = $test_var
    loopType = sequential
    nReps = 1
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    Routine Focus
    Routine trial
  LoopTerminator trials
  Routine Goodbye
