PsychoPy2experiment version="1.90.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  expName = super_mandy_maze
  Screen = 1
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Routines
  Routine practice
    StaticComponent ISI_practice
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent ISI_bkg_practice
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.6
      startVal [time (s)] = 0.0
      size = (2, 2)
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    ImageComponent bkg_practice
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      image [set during: practice.ISI_practice] = $trial_background
      size = (2, 2)
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    TextComponent fix_practice
      text = +
      stopVal [duration (s)] = $fix_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    ImageComponent stim_img_practice
      opacity [set during: practice.ISI_practice] = stim_opacity
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.8
      image [set during: practice.ISI_practice] = $stim
      size = (0.75, 1)
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    PolygonComponent right_practice
      pos = (-0.65, 0)
      shape = rectangle
      startVal [time (s)] = 0.8
      size = (0.25, 0.35)
      fillColor [set every frame] = $color_1
      opacity [set during: practice.ISI_practice] = opacity_1
      stopVal [duration (s)] = 1.7
      lineColor = black
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    PolygonComponent left_practice
      pos = (0.65, 0)
      shape = rectangle
      startVal [time (s)] = 0.8
      size = (0.25, 0.35)
      fillColor [set every frame] = $color_2
      opacity [set during: practice.ISI_practice] = opacity_2
      stopVal [duration (s)] = 1.7
      lineColor = black
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    KeyboardComponent resp_practice
      stopVal [duration (s)] = .7
      forceEndRoutine = False
      allowedKeys = '1', '2', '0'
      startVal [time (s)] = 1.8
      store = first key
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    TextComponent cue_practice
      text = Go!
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 1.8
      letterHeight = 0.4
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    CodeComponent code_practice
      Begin Experiment:
        import os
        import numpy as mp
        from numpy.random import random, randint, normal, shuffle
        from math import ceil
        from glob import glob

        fractal_stims = glob(os.getcwd() + '/fract_img/*png') #import all images to be used
        fractal_stims.sort()
        practice_stims = fractal_stims[:6] #6 fractal images for practice run
        task_stims = fractal_stims[6:] #all remaining for actual task runs
        practice_schedule = run_trialorder() #get trial order for practice run
        practice_schedule = practice_schedule[:int(len(practice_schedule)*1/4)] #reduce 210 to 52 practice trials
        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
      Begin Routine:
        exec_run = False #used in Each Frame to reset color fill between trials

        i = practice_runs.thisN #counts the number of routine interation
        if practice_schedule[i] == -1: #baseline trial
            trial_background = (np.random.rand(1200,800) > 0.85) * 1 #random static background image
            stim = practice_stims[0] #preset opacity of first stim to transparent (0)
            stim_opacity = 0
            fix_dur = 1.8
            curr_corr = np.random.randint(1,3) #pick random resp box as target
            color_1 = color_2 = 'white' #resp box color
            opacity_1 = opacity_2 = 0.55 #preset both to foil opacity
            exec('opacity_{0} = 0.65'.format(curr_corr)) #set increased opacity for target
        else:
            trial_background = np.ones((1200,800)) * 0.5 #gray background
            stim_opacity = 1 #set to solid
            fix_dur = 1.3
            color_1 = color_2 = trialbox_color #inside box is black
            opacity_1 = opacity_2 = 1 #response boxes to solid
            #fixed trials
            if practice_schedule[i] == 0: #set1fix1
                stim = practice_stims[0]
                curr_corr = rando_fixed[0]
            elif practice_schedule[i] == 1: #set1fix2
                stim = practice_stims[1]
                curr_corr = rando_fixed[1]
            elif practice_schedule[i] == 2: #set2fix1
                stim = practice_stims[2]
                curr_corr = rando_fixed[0]
            elif practice_schedule[i] == 3: #set2fix2
                stim = practice_stims[3]
                curr_corr = rando_fixed[1]
            #conditional trials
            else:
                if practice_schedule[i] == 4: #set1COND
                    stim = practice_stims[4]
                    if practice_schedule[i-1] in (0,3): #previous trial was s1f1 or s2f2
                        curr_corr = rando_fixed[1]
                    elif practice_schedule[i-1] in (1,2): #previous trial was s1f2 of s2f1
                        curr_corr = rando_fixed[0]
                elif practice_schedule[i] == 5: #set2COND
                    stim = practice_stims[5]
                    if practice_schedule[i-1] in (0,3):
                        curr_corr = rando_fixed[0]
                    elif practice_schedule[i-1] in (1,2):
                        curr_corr = rando_fixed[1]

        #does not intend to record data from practice session
      End Routine:
        if resp_practice.keys == str(curr_corr): #if correct response
            fb_color = 'teal'
            fb_txt = 'Yes'
            trial_acc = 1
        elif resp_practice.keys == None: #if no response
            fb_color = 'white'
            fb_txt = '?'
            trial_acc = 0
        else: #if incorrect response
            fb_color = 'salmon'
            fb_txt = 'No'
            trial_acc = 0

        color_1 = color_2 = trialbox_color #reset color to gray

        if resp_practice.keys == '0': #if 0 is pressed, end practice loop
            practice_runs.finished = True
      Each Frame:
        #if a response if provided, exec_run avoids resetting the color after key press
        if len(resp_practice.keys) != 0 and exec_run == False:
            which_box = resp_practice.keys[0]
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box)) #execute the color fill of selected box
  Routine feedback
    ImageComponent fb_bkg
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      size = (2, 2)
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    TextComponent fb_text
      color [set every repeat] = $fb_color
      text [set every repeat] = $fb_txt
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
      letterHeight = 0.5
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  Routine set_break
    CodeComponent code_set_break
      Begin Experiment:
        loop_text2 = None
      Begin Routine:
        current_run = 'run_2'

        if set_loop.thisN == 0:
            loop_text2 = 'You have completed 1 out of 3 stimulus sets. \n\nPlease press space to continue to the next set.'
        elif set_loop.thisN == 1:
            loop_text2 = 'You have completed 2 out of 3 stimulus sets. \n\nPlease press space to continue to the next set.'
        else:
            loop_text2 = 'You have completed the final stimulus set. \n\nPlease press space to continue.'
      End Routine:
        expClock.reset()
    TextComponent text_set_break
      text [set every repeat] = $loop_text2
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent set_break_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine begin_task
    TextComponent text_begin
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Practice is complete... now you will start the real task.

        Please do your best!

        Press space bar to begin.
    CodeComponent code_begin
      End Routine:
        expClock.reset()
    KeyboardComponent resp_begin
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine run_break
    CodeComponent code_run_break
      Begin Experiment:
        loop_text = None
      Begin Routine:
        current_run = 'run_2'
        run_schedule = run_trialorder() #new schedule for first run
        rando_fixed = np.random.permutation([1,2]) #random correct responses for fixed trials

        if set_loop.thisN == 0:
            loop_text = 'You have completed the first half of image set #1. \n\nPlease press space to complete the second half.'
        elif set_loop.thisN == 1:
            loop_text = 'You have completed the first half of image set #2. \n\nPlease press space to complete the second half.'
        else:
            loop_text = 'You have completed the first half of image set #3. \n\nPlease press space to complete the second half.'
      End Routine:
        expClock.reset()
        all_trial_acc = []
    TextComponent text_run_break
      text [set every repeat] = $loop_text
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent key_run_break
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine delay
    ImageComponent image_delay
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      size = (2, 2)
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  Routine trial
    StaticComponent ISI_1
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    ImageComponent isi_bkg_1
      color = $[-0.5,-0.5,-0.5]
      stopVal [duration (s)] = 0.6
      startVal [time (s)] = 0.0
      size = (2,2)
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    ImageComponent bkg_1
      color = black
      stopVal [duration (s)] = 2
      startVal [time (s)] = 0.5
      image [set during: trial.ISI_1] = $trial_background
      size = (2,2)
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    TextComponent fixation_1
      text = +
      stopVal [duration (s)] = $fix_dur
      startVal [time (s)] = 0.0
      letterHeight = 0.3
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    ImageComponent stim_img_1
      opacity [set during: trial.ISI_1] = stim_opacity
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.8
      image [set during: trial.ISI_1] = $stim
      size = (0.75, 1)
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    PolygonComponent left_resp_1
      pos = (-0.65, 0)
      shape = rectangle
      startVal [time (s)] = 0.8
      size = (0.25, 0.35)
      fillColor [set every frame] = $color_1
      opacity [set during: trial.ISI_1] = opacity_1
      stopVal [duration (s)] = 1.7
      lineColor = black
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    PolygonComponent right_resp_1
      pos = (0.65, 0)
      shape = rectangle
      startVal [time (s)] = 0.8
      size = (0.25, 0.35)
      fillColor [set every frame] = $color_2
      opacity [set during: trial.ISI_1] = opacity_2
      stopVal [duration (s)] = 1.7
      lineColor = black
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    KeyboardComponent resp_trial_1
      stopVal [duration (s)] = 0.7
      forceEndRoutine = False
      allowedKeys = '1', '2'
      startVal [time (s)] = 1.8
      store = first key
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    TextComponent cue_1
      text = Go!
      stopVal [duration (s)] = 0.7
      startVal [time (s)] = 1.8
      letterHeight = 0.4
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    CodeComponent code_1
      Begin Experiment:
        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
        all_trial_acc = []
      Begin Routine:
        runs = eval(current_run)
        runs.addData('StimOnset', expClock.getTime())
        exec_run = False

        i = runs.thisN #counts the number of routine interation
        BL_counter = 0
        if run_schedule[i] == -1: #baseline trial
            BL_counter += 1
            trial_background = (np.random.rand(1200,800) > 0.85) * 1 #random static background image
            stim = fractal_stims[0] #preset opacity of first stim to transparent (0)
            stim_opacity = 0
            fix_dur = 1.8
            curr_corr = np.random.randint(1,3) #pick random resp box as target
            color_1 = color_2 = 'white' #resp box color
            opacity_1 = opacity_2 = 0.55 #preset both to foil opacity
            if BL_counter < 5:
                exec('opacity_{0} = 0.65'.format(curr_corr)) #set increased opacity for target
            else:
                if sum(all_trial_acc[-5:]) > 3:
                    exec('opacity_{0} = 0.65 * 0.9'.format(curr_corr))
                elif sum(all_trial_acc[-5:]) <= 2:
                    exec('opacity_{0} = 0.65 * 1.3'.format(curr_corr))
                else:
                    exec('opacity_{0} = 0.65'.format(curr_corr))
            runs.addData('fract_img', 'NA') #if BL trial, no stim image
        #task trials
        else:
            trial_background = np.ones((1200,800)) * 0.5 #gray background
            stim_opacity = 1 #set to solid
            fix_dur = 1.3
            color_1 = color_2 = trialbox_color #inside box is black
            opacity_1 = opacity_2 = 1 #response boxes to solid
            #fixed trials
            if run_schedule[i] == 0: #set1fix1
                stim = fractal_stims[0]
                curr_corr = rando_fixed[0]
                stim_label = 'S1F1'
            elif run_schedule[i] == 1: #set1fix2
                stim = fractal_stims[1]
                curr_corr = rando_fixed[1]
                stim_label = 'S1F1'
            elif run_schedule[i] == 2: #set2fix1
                stim = fractal_stims[2]
                curr_corr = rando_fixed[0]
                stim_label = 'S2F1'
            elif run_schedule[i] == 3: #set2fix2
                stim = fractal_stims[3]
                curr_corr = rando_fixed[1]
                stim_label = 'S2F2'
            #conditional trials
            else:
                if run_schedule[i] == 4: #set1COND
                    stim = fractal_stims[4]
                    stim_label = 'S1_C'
                    if run_schedule[i-1] in (0,3): #previous trial was s1f1 or s2f2
                        curr_corr = rando_fixed[1]
                    elif run_schedule[i-1] in (1,2): #previous trial was s1f2 of s2f1
                        curr_corr = rando_fixed[0]
                elif run_schedule[i] == 5: #set2COND
                    stim = fractal_stims[5]
                    stim_label = 'S2_C'
                    if run_schedule[i-1] in (0,3):
                        curr_corr = rando_fixed[0]
                    elif run_schedule[i-1] in (1,2):
                        curr_corr = rando_fixed[1]
            runs.addData('fract_img', fractal_stims[run_schedule[i]][-12:])
            runs.addData('stim_ID', stim_label)
        runs.addData('correct', curr_corr)
      End Routine:
        if resp_trial_1.keys == str(curr_corr):
            fb_color = 'teal'
            fb_txt = 'Yes'
            trial_acc = 1
        elif resp_trial_1.keys == None:
            fb_color = 'white'
            fb_txt = '?'
            trial_acc = 0
        else:
            fb_color = 'salmon'
            fb_txt = 'No'
            trial_acc = 0
        all_trial_acc.append(trial_acc)
        runs.addData('trial_acc', trial_acc)

        color_1 = color_2 = trialbox_color
      Each Frame:
        if len(resp_trial_1.keys) !=0 and exec_run == False:
            which_box = resp_trial_1.keys[0]
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
  Routine goodbye
    TextComponent text_goodbye
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Thank you for participating in my experiment!

        You are finished and may now leave.
  Routine stim_prep
    CodeComponent code_prep
      Begin Experiment:
        task_stims = np.random.permutation(task_stims)
        all_stim_sets = []
        for set in range(3):
            fract_stimset = task_stims[set:30:4]
            all_stim_sets.append(fract_stimset)
      Begin Routine:
        fractal_stims = all_stim_sets[loop_num] #fractals to be used in current set
        run_schedule = run_trialorder() #new schedule for first run
        rando_fixed = np.random.permutation([1,2]) #random correct responses for fixed trials
        current_run = 'run_1'
      End Routine:
        expClock.reset()
  Routine instructions
    ImageComponent bkg_instructions
      color = $[-0.5,-0.5,-0.5]
      startVal [time (s)] = 0.0
      size = (2, 2)
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    TextComponent text_instructions
      wrapWidth = 1.5
      startVal [time (s)] = 0.0
      letterHeight = 0.08
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      text [set every repeat]:
        ﻿You will be presented with 6 unique images over multiple trials. Each image is associated with either the right or left box. Your job is to determine which box is matched with each image. Four (4) images will always be associated with the same box, while the correct choice for two (2) images will depend on the identity of the image that came immediately before.

        The image will last for one second, and then disappear. A “Go!” message will let you know when to respond. Please provide your answer as quickly and accurately as you can. You will receive a “Yes” or “No” message to let you know if you selected the correct answer. If you don’t response in time, a “?” will appear. Occasionally you will receive a second trial type with a static background and 4 slightly transparent squares. You should select the brightest square.

        Before you begin the experiment, you will get to practice the task and become accustomed to the timing. When you are ready to begin the actual task, press the “0” key.

        Please press the space key to begin.
    KeyboardComponent start_key
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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    CodeComponent code_instructions
      Begin Experiment:
        expClock = core.Clock() #begins clock
        '''
        if expInfo['scanner'] == 1:
            wait_screen = 'Waiting for scanner to start...'
        else:
            wait_screen = 'Pleasr press the space key to begin.'
        '''
        def fixed(v): #function to isolate fixed trials
            return v >= 0 and v < 4

        def run_trialorder(): #function to create pseudo-random trial schedule for each run
            dummy_types = [-1,0,1,2,3,4,5]*30 ## -1 = baseline trial; 4-5 = conditional trials
            random_dummies = np.random.permutation(dummy_types)
            i = 0
            while i < len(random_dummies[:-1]):
                v = random_dummies[i]
                v2 = random_dummies[i+1]
                #prevents conditional trials from being preceded by either baseline or conditionals
                if (v2 >= 4 and v >= 4) or (i == 0 and (v >= 4 or v == -1)) or (v == -1 and (v2 == -1 or v2 >= 4)):
                    for j, safe_val in enumerate(random_dummies):
                        v0 = None
                        safe_v2 = None
                        if j+1 != len(random_dummies):
                            safe_v2 = random_dummies[j+1]
                            if fixed(safe_v2) and fixed(safe_val):
                                temp = random_dummies[j]
                                random_dummies[j] = random_dummies[i]
                                random_dummies[i] = temp
                                i = -1
                                break
                        if j > 0: #if not the first value
                            v0 = random_dummies[j-1]
                            if fixed(v0) and fixed(safe_val):
                                temp = random_dummies[j]
                                random_dummies[j] = random_dummies[i]
                                random_dummies[i] = temp
                                i = -1
                                break
                i += 1
            return random_dummies
      Begin Routine:
        rando_fixed = np.random.permutation([1,2]) #random correct responses for fixed trials
      End Routine:
        expClock.reset() #rests clock at the end of instructions
Flow
  Routine instructions
  LoopInitiator practice_runs loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 52
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    Routine practice
    Routine feedback
  LoopTerminator practice_runs
  Routine begin_task
  LoopInitiator set_loop loopType="TrialHandler"
    conditionsFile = loop_schedule.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'loop_num': 0},
      {'loop_num': 1},
      {'loop_num': 2}]
    Routine stim_prep
    Routine delay
    LoopInitiator run_1 loopType="TrialHandler"
      loopType = random
      nReps = 210
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      Routine trial
      Routine feedback
    LoopTerminator run_1
    Routine delay
    Routine run_break
    Routine delay
    LoopInitiator run_2 loopType="TrialHandler"
      loopType = random
      nReps = 210
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      Routine trial
      Routine feedback
    LoopTerminator run_2
    Routine delay
    Routine set_break
  LoopTerminator set_loop
  Routine goodbye
