PsychoPy2experiment version="2020.2.4"
Settings
  Experiment info = {u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[-0.5,-0.5,-0.5]
  expName = vCAT_localizer
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Routines
  Routine stim_reset
    CodeComponent code_run_break
      Code Type = Auto->JS
      Begin Routine:
        current_run = 'scenes'
  Routine practice
    StaticComponent ISI_practice
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent ISI_bkg_practice
      color = blue
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    ImageComponent bkg_practice
      color = black
      image [set during: practice.ISI_practice] = $trial_background
      size = (2, 2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $trial_dur
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    TextComponent fix_practice
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_dur
      text = +
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    ImageComponent stim_img_practice
      image [set during: practice.ISI_practice] = $stim
      opacity [set during: practice.ISI_practice] = stim_opacity
      size = (0.50, 0.75)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.0
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    PolygonComponent right_practice
      fillColor [set every frame] = $color_1
      lineColor = black
      opacity [set during: practice.ISI_practice] = opacity_1
      pos = (-0.65, 0)
      shape = rectangle
      size = (0.35, 0.45)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    PolygonComponent left_practice
      fillColor [set every frame] = $color_2
      lineColor = black
      opacity [set during: practice.ISI_practice] = opacity_2
      pos = (0.65, 0)
      shape = rectangle
      size = (0.35, 0.45)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    ImageComponent right_scene
      image [set during: practice.ISI_practice] = $right_box_img
      opacity [set during: practice.ISI_practice] = object_opacity
      pos = (-0.65, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    ImageComponent left_scene
      image [set during: practice.ISI_practice] = $left_box_img
      opacity [set during: practice.ISI_practice] = object_opacity
      pos = (0.65, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    KeyboardComponent resp_practice
      allowedKeys = '1', '2', '0'
      forceEndRoutine = False
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      store = first key
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    TextComponent cue_practice
      font = Ariel
      letterHeight = 0.4
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      text = Go!
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    CodeComponent code_practice
      Code Type = Auto->JS
      Begin Experiment:
        import os
        import numpy as np
        from numpy.random import random, randint, normal, shuffle
        import random
        from math import ceil
        from glob import glob

        ##Practice Set Dependencies
        #stims (x5)
        all_kaleidos = glob(os.getcwd() + '/kaleido_img/*jpg') #import all images to be used
        all_kaleidos = np.random.permutation(all_kaleidos) #randomize order to grab different images each time
        practice_kaleidos = all_kaleidos[:5] #5 for practice run
        task_kaleidos = all_kaleidos[5:] #all remaining for actual task runs
        #object (x4)
        all_objects = glob(os.getcwd() + '/object_img/*jpg')
        all_objects = np.random.permutation(all_objects)
        practice_objects = all_objects[:4] # 4 object images for practice run
        task_objects = all_objects[4:]
        #scene (x1)
        all_scenes = glob(os.getcwd() + '/scene_img/*jpg')
        all_scenes = np.random.permutation(all_scenes)
        practice_scene = all_scenes[0] # 1 scene for practice choice
        task_scenes = all_scenes[1:]
        #face (x1)
        all_faces = glob(os.getcwd() + '/face_img/*jpg')
        all_faces = np.random.permutation(all_faces)
        practice_face = all_faces[0] # 1 face for practice choice
        task_faces = all_faces[1:]

        #determine practice schedule
        practice_schedule = run_trialorder()
        #practice_schedule = practice_schedule[:int(len(practice_schedule)*1/2)] #reduce 210 to 52 practice trials
        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
      Begin Routine:
        exec_run = False #used in Each Frame to reset color fill between trials

        i = practice_runs.thisN #counts the number of routine interation
        if practice_schedule[i] == -1: #baseline trial
            trial_background = (np.random.rand(1200,800) > 0.85) * 1 #random static background image
            stim = practice_kaleidos[0] #preset opacity of first stim to transparent (0)
            stim_opacity = 0
            object_opacity = 0
            trial_dur = 8.0
            shape_onset = np.random.uniform(0.8, 6.3)
            shape_dur = 8.0 - shape_onset
            resp_onset = shape_onset + 1.0
            resp_dur = 0.7
            fix_dur = shape_onset - 0.1
            curr_corr = np.random.randint(1,3) #pick random resp box as target
            color_1 = color_2 = 'white' #resp box color
            opacity_1 = opacity_2 = 0.55 #preset both to foil opacity
            exec('opacity_{0} = 0.65'.format(curr_corr)) #set increased opacity for target
        else: #task trial
            trial_background = np.ones((1200,800)) * 0.5 #dark gray background
            stim_opacity = 1
            object_opacity = 1
            fix_dur = 1.3
            trial_dur = 2.0
            shape_onset = 0.8
            shape_dur = 1.7 #offset time = 2.5
            resp_onset = 1.8 #0.5 seconds
            resp_dur = 0.7
            color_1 = color_2 = 'gray' #gray inside both boxes
            opacity_1 = opacity_2 = 1 #both response boxes to solid
            corr_img = None
            incorr_img = None
            #fixed trials
            if practice_schedule[i] == 0: #S1F1 - face
                stim = practice_kaleidos[0] #set fractal
                corr_img = practice_objects[0]
                incorr_img = practice_objects[1]
            elif practice_schedule[i] == 1: #S1F2 - scene
                stim = practice_kaleidos[1]
                corr_img = practice_objects[1]
                incorr_img = practice_objects[0]
            elif practice_schedule[i] == 2: #S2F1 - face
                stim = practice_kaleidos[2]
                corr_img = practice_objects[2]
                incorr_img = practice_objects[3]
            elif practice_schedule[i] == 3: #S2F2 - scene
                stim = practice_kaleidos[3]
                corr_img = practice_objects[3]
                incorr_img = practice_objects[2]
            #conditional trials
            else:
                stim = practice_kaleidos[4]
                if practice_schedule[i-1] in (0,2): #previous trial was S1F1 or S2F1 (face)
                    corr_img = practice_face
                    incorr_img = practice_scene
                elif practice_schedule[i-1] in (1,3): #previous trial was S1F2 or S2F2 (scene)
                    corr_img = practice_scene
                    incorr_img = practice_face
            left_box_img, right_box_img, curr_corr = sides_assign(corr_img,incorr_img)
        #does not record practice session data
      Each Frame:
        #if a response if provided, exec_run avoids resetting the color after key press
        if len(resp_practice.keys) != 0 and exec_run == False:
            which_box = resp_practice.keys[0]
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box)) #execute the color fill of selected box
      End Routine:
        if resp_practice.keys == str(curr_corr): #if correct response
            fb_color = 'teal'
            fb_txt = 'Yes'
            trial_acc = 1
        elif resp_practice.keys == None: #if no response
            fb_color = 'white'
            fb_txt = '?'
            trial_acc = 0
        else: #if incorrect response
            fb_color = 'salmon'
            fb_txt = 'No'
            trial_acc = 0

        #color_1 = color_2 = trialbox_color #reset color to white

        if resp_practice.keys == '0': #if 0 is pressed, end practice loop
            practice_runs.finished = True
  Routine feedback
    ImageComponent fb_bkg
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fb_text
      color [set every repeat] = $fb_color
      font = Ariel
      letterHeight = 0.5
      opacity = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb_txt
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        if run_schedule[i] == -1:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine set_break
    CodeComponent code_set_break
      Code Type = Auto->JS
      Begin Experiment:
        loop_text2 = None
      Begin Routine:
        current_run = 'run_2'

        if set_loop.thisN <= 0:
            loop_text2 = 'You have completed the first set. \n\nPlease wait for the next scan to begin.'
        else:
            loop_text2 = 'You have completed the final set. \n\nPlease wait for the next scan to begin.'
      End Routine:
        expClock.reset()
    TextComponent text_set_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $loop_text2
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    KeyboardComponent set_break_key
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_task
    TextComponent text_begin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice is complete... now you will start the real task.

        Please do your best!

        Press space bar to begin.
    CodeComponent code_begin
      Code Type = Auto->JS
      End Routine:
        expClock.reset()
    KeyboardComponent resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay_end
    ImageComponent image_delay
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6.0
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    TextComponent text
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = +
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  Routine trial
    KeyboardComponent resp_trial_1
      allowedKeys = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
      store = first key
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    CodeComponent code_1
      Code Type = Py
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      Begin Routine:
        runs = eval(current_run)
        runs.addData("StimOnset", expClock.getTime() + 0.25) #add 0.25 to account for ISI
        exec_run = False

        options = range(1,5) + range(6,10) #all numbers but 5
        i = runs.thisN
        #localizer trial
        if trialtype == 0:
            math_stim = ''
            mathstim_opacity = 0
            stim_opacity = 1
            if current_run == 'faces':
                stim = np.random.choice(localizer_faces)
            else:
                stim = np.random.choice(localizer_scenes)
            runs.addData('stim', stim.split("/")[-1])
        else:
            stim_opacity = 0
            mathstim_opacity = 1
            math_stim = np.random.choice(options)
            runs.addData('stim', math_stim)
      End Routine:
        correct = None
        if mathstim_opacity == 0:
            if stim.split("/")[-2] == 'face_img':
                if (stim.split("/")[-1] == 'female' and resp_trial_1.keys == "1") or (stim.split("/")[-1] == 'male' and resp_trial_1.keys == "2"):
                    correct = 1
                else:
                    correct = 0
            else:
                if (stim.split("/")[-1] == 'water' and resp_trial_1.keys == "1") or (stim.split("/")[-1] == 'land' and resp_trial_1.keys == "2"):
                    correct = 1
                else:
                    correct = 0
        else:
            if (math_stim < 5 and resp_trial_1.keys == "1") or (math_stim > 5 and resp_trial_1.keys == "2"):
                correct = 1
            else:
                correct = 0

        runs.addData('trial_acc', correct)
    ImageComponent isi_bkg_1
      color = $[-0.5,-0.5,-0.5]
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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    ImageComponent bkg_1
      color = $[-0.5,-0.5,-0.5]
      size = (2,2)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
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    TextComponent fixation_1
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.25
      text = +
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    ImageComponent stim_img_1
      image [set every repeat] = $stim
      opacity [set every repeat] = $stim_opacity
      size = (1, 1.25)
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
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    TextComponent math_num
      letterHeight = 0.8
      opacity [set every repeat] = $mathstim_opacity
      startVal [time (s)] = 0.25
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $math_stim
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  Routine goodbye
    TextComponent text_goodbye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Great job!

        Please wait for the next section of the experiment to begin.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine delay_init
    ImageComponent delay
      color = $[-0.5,-0.5,-0.5]
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.75
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    TextComponent text_2
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.75
      text = +
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  Routine stim_prep
    CodeComponent code_prep
      Code Type = Auto->JS
      Begin Routine:
        current_run = 'faces'
        math_stim = ''
  Routine instructions
    ImageComponent bkg_instructions
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions
      font = Ariel
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        During this part of the experiment, you will be asked two kinds of questions.

        #1 "Yes" or "No" questions:
        When you see a face: Is it female?
        When you see a scene: Is there a lake or river?
        Please press the left button for "yes" and the right button for "no".

        #2 "Greater" or "Less" than 5:
        You will occasionally be presented with a single number:
        Press the left button if the number is less than 5.
        Press the right button if the number is greater than 5.

        Please wait for the scanner to begin.
    KeyboardComponent start_key
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_instructions
      Code Type = Auto->JS
      Begin Experiment:
        expClock = core.Clock()

        import os
        import numpy as np
        from numpy.random import random, randint, choice, permutation
        import random
        from glob import glob

        stim_opacity = 0

        ##Set Dependencies
        #scenes
        localizer_scenes = glob(os.getcwd() + '/scene_img/*/*jpg')
        #faces
        localizer_faces = glob(os.getcwd() + '/face_img/*/*bmp')
      End Routine:
        expClock.reset()
Flow
  Routine instructions
  Routine delay_init
  LoopInitiator runs loopType="TrialHandler"
    loopType = sequential
    nReps = 7
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    Routine stim_prep
    LoopInitiator faces loopType="TrialHandler"
      conditionsFile = localizer_schedule.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)])]
      Routine trial
    LoopTerminator faces
    Routine stim_reset
    LoopInitiator scenes loopType="TrialHandler"
      conditionsFile = localizer_schedule.xlsx
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 0)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)]),
        OrderedDict([('trialtype', 1)])]
      Routine trial
    LoopTerminator scenes
  LoopTerminator runs
  Routine delay_end
  Routine goodbye
