PsychoPy2experiment version="2021.1.4"
Settings
  Experiment info = {u'participant': u''}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = [1280, 800]
  color = $[-0.5,-0.5,-0.5]
  expName = vCAT_task
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Routines
  Routine practice
    StaticComponent ISI_practice
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    ImageComponent ISI_bkg_practice
      color = blue
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    ImageComponent bkg_practice
      color = black
      image [set during: practice.ISI_practice] = $trial_background
      size = (2, 2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $trial_dur
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    TextComponent fix_practice
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_dur
      text = +
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    ImageComponent stim_img_practice
      image [set during: practice.ISI_practice] = $stim
      opacity [set during: practice.ISI_practice] = stim_opacity
      size = (0.50, 0.75)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.0
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    PolygonComponent right_practice
      fillColor [set every frame] = $color_1
      lineColor = black
      opacity [set during: practice.ISI_practice] = opacity_1
      pos = (-0.65, 0)
      shape = rectangle
      size = (0.35, 0.45)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    PolygonComponent left_practice
      fillColor [set every frame] = $color_2
      lineColor = black
      opacity [set during: practice.ISI_practice] = opacity_2
      pos = (0.65, 0)
      shape = rectangle
      size = (0.35, 0.45)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    ImageComponent right_scene
      image [set during: practice.ISI_practice] = $right_box_img
      opacity [set during: practice.ISI_practice] = object_opacity
      pos = (-0.65, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    ImageComponent left_scene
      image [set during: practice.ISI_practice] = $left_box_img
      opacity [set during: practice.ISI_practice] = object_opacity
      pos = (0.65, 0)
      size = (0.30, 0.40)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    KeyboardComponent resp_practice
      allowedKeys = '1', '2', '0'
      forceEndRoutine = False
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      store = first key
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    TextComponent cue_practice
      font = Ariel
      letterHeight = 0.4
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      text = Go!
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    CodeComponent code_practice
      Code Type = Auto->JS
      Begin Experiment:
        import os
        import numpy as np
        from numpy.random import random, randint, normal, shuffle
        import random
        from math import ceil
        from glob import glob

        ##Practice Set Dependencies
        #stims (x5)
        all_kaleidos = glob(os.getcwd() + '/kaleido_img/*jpg') #import all images to be used
        all_kaleidos = np.random.permutation(all_kaleidos) #randomize order to grab different images each time
        practice_kaleidos = all_kaleidos[:5] #5 for practice run
        task_kaleidos = all_kaleidos[5:] #all remaining for actual task runs
        #object (x4)
        all_objects = glob(os.getcwd() + '/object_img/*jpg')
        all_objects = np.random.permutation(all_objects)
        practice_objects = all_objects[:4] # 4 object images for practice run
        task_objects = all_objects[4:]
        #scene (x1)
        all_scenes = glob(os.getcwd() + '/scene_img/*jpg')
        all_scenes = np.random.permutation(all_scenes)
        practice_scene = all_scenes[0] # 1 scene for practice choice
        task_scenes = all_scenes[1:]
        #face (x1)
        all_faces = glob(os.getcwd() + '/face_img/*jpg')
        all_faces = np.random.permutation(all_faces)
        practice_face = all_faces[0] # 1 face for practice choice
        task_faces = all_faces[1:]

        #determine practice schedule
        practice_schedule = run_trialorder()
        #practice_schedule = practice_schedule[:int(len(practice_schedule)*1/2)] #reduce 210 to 52 practice trials
        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
      Begin Routine:
        exec_run = False #used in Each Frame to reset color fill between trials

        i = practice_runs.thisN #counts the number of routine interation
        if practice_schedule[i] == -1: #baseline trial
            trial_background = (np.random.rand(1200,800) > 0.85) * 1 #random static background image
            stim = practice_kaleidos[0] #preset opacity of first stim to transparent (0)
            stim_opacity = 0
            object_opacity = 0
            trial_dur = 8.0
            shape_onset = np.random.uniform(0.8, 6.3)
            shape_dur = 8.0 - shape_onset
            resp_onset = shape_onset + 1.0
            resp_dur = 0.7
            fix_dur = shape_onset - 0.1
            curr_corr = np.random.randint(1,3) #pick random resp box as target
            color_1 = color_2 = 'white' #resp box color
            opacity_1 = opacity_2 = 0.55 #preset both to foil opacity
            exec('opacity_{0} = 0.65'.format(curr_corr)) #set increased opacity for target
        else: #task trial
            trial_background = np.ones((1200,800)) * 0.5 #dark gray background
            stim_opacity = 1
            object_opacity = 1
            fix_dur = 1.3
            trial_dur = 2.0
            shape_onset = 0.8
            shape_dur = 1.7 #offset time = 2.5
            resp_onset = 1.8 #0.5 seconds
            resp_dur = 0.7
            color_1 = color_2 = 'gray' #gray inside both boxes
            opacity_1 = opacity_2 = 1 #both response boxes to solid
            corr_img = None
            incorr_img = None
            #fixed trials
            if practice_schedule[i] == 0: #S1F1 - face
                stim = practice_kaleidos[0] #set fractal
                corr_img = practice_objects[0]
                incorr_img = practice_objects[1]
            elif practice_schedule[i] == 1: #S1F2 - scene
                stim = practice_kaleidos[1]
                corr_img = practice_objects[1]
                incorr_img = practice_objects[0]
            elif practice_schedule[i] == 2: #S2F1 - face
                stim = practice_kaleidos[2]
                corr_img = practice_objects[2]
                incorr_img = practice_objects[3]
            elif practice_schedule[i] == 3: #S2F2 - scene
                stim = practice_kaleidos[3]
                corr_img = practice_objects[3]
                incorr_img = practice_objects[2]
            #conditional trials
            else:
                stim = practice_kaleidos[4]
                if practice_schedule[i-1] in (0,2): #previous trial was S1F1 or S2F1 (face)
                    corr_img = practice_face
                    incorr_img = practice_scene
                elif practice_schedule[i-1] in (1,3): #previous trial was S1F2 or S2F2 (scene)
                    corr_img = practice_scene
                    incorr_img = practice_face
            left_box_img, right_box_img, curr_corr = sides_assign(corr_img,incorr_img)
        #does not record practice session data
      Each Frame:
        #if a response if provided, exec_run avoids resetting the color after key press
        if len(resp_practice.keys) != 0 and exec_run == False:
            which_box = resp_practice.keys[0]
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box)) #execute the color fill of selected box
      End Routine:
        if resp_practice.keys == str(curr_corr): #if correct response
            fb_color = 'teal'
            fb_txt = 'Yes'
            trial_acc = 1
        elif resp_practice.keys == None: #if no response
            fb_color = 'white'
            fb_txt = '?'
            trial_acc = 0
        else: #if incorrect response
            fb_color = 'salmon'
            fb_txt = 'No'
            trial_acc = 0

        #color_1 = color_2 = trialbox_color #reset color to white

        if resp_practice.keys == '0': #if 0 is pressed, end practice loop
            practice_runs.finished = True
  Routine feedback
    ImageComponent fb_bkg
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
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    TextComponent fb_text
      color [set every repeat] = $fb_color
      font = Ariel
      letterHeight = 0.5
      opacity = 0.8
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text [set every repeat] = $fb_txt
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    CodeComponent code
      Code Type = Auto->JS
      Begin Routine:
        if run_schedule[i] == -1:
            continueRoutine = False
        else:
            continueRoutine = True
  Routine set_break
    CodeComponent code_set_break
      Code Type = Auto->JS
      Begin Experiment:
        loop_text2 = None
      Begin Routine:
        current_run = 'run_2'

        if set_loop.thisN <= 0:
            loop_text2 = 'Please take a short break. \n\nPlease wait for the scanner to begin.'
        else:
            loop_text2 = 'You have completed the final run. \n\nPlease remain still for the next scanning session.'
      End Routine:
        expClock.reset()
    TextComponent text_set_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text [set every repeat] = $loop_text2
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    KeyboardComponent set_break_key
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine begin_task
    TextComponent text_begin
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Practice is complete... now you will start the real task.

        Please do your best!

        Press space bar to begin.
    CodeComponent code_begin
      Code Type = Auto->JS
      End Routine:
        expClock.reset()
    KeyboardComponent resp_begin
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine run_break
    CodeComponent code_run_break
      Code Type = Auto->JS
      Begin Routine:
        current_run = 'run_2'
        run_schedule = run_trialorder() #new schedule for second run
        # checks the trial order to make sure its balanced
        success = False
        while success == False:
            faces = 0
            run_schedule = run_trialorder()
            for i, item in enumerate(run_schedule):
                if i != 179:
                    if item in [0,2] and run_schedule[i+1] == -1:
                        faces += 1
            if faces >= 12 and faces <= 18:
                success = True
      End Routine:
        expClock.reset()
    TextComponent text_run_break
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        You have completed half of the first image set.

        Please wait for the scanner to begin to complete the second half.
    KeyboardComponent key_run_break
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial
    CodeComponent code_1
      Code Type = Py
      Begin Experiment:
        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
        object_opacity = 0
      Begin Routine:
        runs = eval(current_run)
        runs.addData('StimOnset', expClock.getTime()+0.8)#add length of delay
        exec_run = False

        i = runs.thisN #counts the number of routine interation
        if run_schedule[i] == -1: #baseline trial
            trial_background = (np.random.rand(1200,800) > 0.85) * 1 #random static background image
            stim = kaleido_stims[0] #preset opacity of first stim to transparent (0)
            stim_opacity = 0
            object_opacity = 0
            trial_dur = 5.0
            curr_corr = np.random.randint(1,3) #pick random resp box as target
            color_1 = color_2 = 'white' #resp box color
            opacity_1 = opacity_2 = 0.55 #preset both to foil opacity    trial_dur = 8.0
            shape_onset = np.random.uniform(0.8, 3.3)
            shape_dur = 1.7
            resp_onset = shape_onset + 1.0
            resp_dur = 0.7
            fix_dur = shape_onset - 0.1
            fix2_onset = resp_onset + 0.7
            fix2_dur = 5.5 - fix2_onset
            exec('opacity_{0} = 0.65'.format(curr_corr)) #set increased opacity for target
            runs.addData('kaleido_img', 'NA') #if BL trial, no stim image
        else: #task trial
            trial_background = np.ones((1200,800)) * 0.5 #dark gray background
            stim_opacity = 1
            object_opacity = 1
            fix_dur = 1.3
            trial_dur = 2.0
            shape_onset = 0.8
            shape_dur = 1.7 #offset time = 2.5
            resp_onset = 1.8 #0.5 seconds
            resp_dur = 0.7
            fix2_onset = 0
            fix2_dur = 0
            color_1 = color_2 = 'gray' #inside box is black
            opacity_1 = opacity_2 = 1 #response boxes to solid
            corr_img = None
            incorr_img = None
            #fixed trials
            if run_schedule[i] == 0: #S1F1 - face
                stim = kaleido_stims[0] #set fractal
                corr_img = object_stims[0]
                incorr_img = object_stims[1]
                stim_label = 'face1'
            elif run_schedule[i] == 1: #S1F2 - scene
                stim = kaleido_stims[1]
                corr_img = object_stims[1]
                incorr_img = object_stims[0]
                stim_label = 'scene1'
            elif run_schedule[i] == 2: #S2F1 - face
                stim = kaleido_stims[2]
                corr_img = object_stims[2]
                incorr_img = object_stims[3]
                stim_label = 'face2'
            elif run_schedule[i] == 3: #S2F2 - scene
                stim = kaleido_stims[3]
                corr_img = object_stims[3]
                incorr_img = object_stims[2]
                stim_label = 'scene2'
            #conditional trials
            else:
                stim = kaleido_stims[4]
                if run_schedule[i-1] in (0,2): #previous trial was S1F1 or S2F1 (face)
                    corr_img = random.choice(face_stim)
                    incorr_img = random.choice(scene_stim)
                elif run_schedule[i-1] in (1,3): #previous trial was S1F2 or S2F2 (scene)
                    corr_img = random.choice(scene_stim)
                    incorr_img = random.choice(face_stim)
                stim_label = 'COND'
            left_box_img, right_box_img, curr_corr = sides_assign(corr_img, incorr_img)
            runs.addData('kaleido_img', kaleido_stims[run_schedule[i]][-8:])
            runs.addData('stim_ID', stim_label)
        runs.addData('correct', curr_corr)
      Each Frame:
        if len(resp_trial_1.keys) != 0 and exec_run == False:
            which_box = resp_trial_1.keys[0]
            exec_run = True
            exec('color_{0} = "yellow"'.format(which_box))
      End Routine:
        if resp_trial_1.keys == str(curr_corr):
            fb_color = 'teal'
            fb_txt = 'Yes'
            trial_acc = 1
        elif resp_trial_1.keys == None:
            fb_color = 'white'
            fb_txt = '?'
            trial_acc = 0
        else:
            fb_color = 'salmon'
            fb_txt = 'No'
            trial_acc = 0
        runs.addData('trial_acc', trial_acc)

        #color_1 = color_2 = trialbox_color
    ImageComponent isi_bkg_1
      color = $[-0.5,-0.5,-0.5]
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.6
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    ImageComponent bkg_1
      color = black
      image [set every repeat] = $trial_background
      size = (2,2)
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = $trial_dur
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    TextComponent fixation_1
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = $fix_dur
      text = +
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    ImageComponent stim_img_1
      image [set every repeat] = $stim
      opacity [set every repeat] = stim_opacity
      size = (0.50, 0.75)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.0
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    PolygonComponent left_resp_1
      fillColor [set every frame] = $color_1
      lineColor = black
      opacity [set every repeat] = opacity_1
      pos = (-0.65, 0)
      shape = rectangle
      size = (0.55, 0.65)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    PolygonComponent right_resp_1
      fillColor [set every frame] = $color_2
      lineColor = black
      opacity [set every repeat] = opacity_2
      pos = (0.65, 0)
      shape = rectangle
      size = (0.55, 0.65)
      startVal [time (s)] = $shape_onset
      stopVal [duration (s)] = $shape_dur
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    ImageComponent left_obj
      image [set every repeat] = $left_box_img
      opacity [set every repeat] = object_opacity
      pos = (-0.65, 0)
      size = (0.5, 0.6)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    ImageComponent right_obj
      image [set every repeat] = $right_box_img
      opacity [set every repeat] = object_opacity
      pos = (0.65, 0)
      size = (0.5, 0.6)
      startVal [time (s)] = 0.8
      stopVal [duration (s)] = 1.7
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    KeyboardComponent resp_trial_1
      allowedKeys = '1', '2'
      forceEndRoutine = False
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      store = first key
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    TextComponent cue_1
      letterHeight = 0.4
      startVal [time (s)] = $resp_onset
      stopVal [duration (s)] = $resp_dur
      text = Go!
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    TextComponent fixation_2
      letterHeight = 0.3
      startVal [time (s)] = $fix2_onset
      stopVal [duration (s)] = $fix2_dur
      text = +
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  Routine delay_end
    ImageComponent image
      color = $[-0.5,-0.5,-0.5]
      size = (2,2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
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    TextComponent fix_end
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 6
      text = +
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  Routine goodbye
    TextComponent text_goodbye
      letterHeight = 0.1
      startVal [time (s)] = 0.0
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      text:
        Thank you for participating in my experiment!

        You are finished and may now leave.
  Routine delay_init
    ImageComponent image_delay
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
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    TextComponent fixation
      letterHeight = 0.3
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.5
      text = +
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  Routine stim_prep
    CodeComponent code_prep
      Code Type = Auto->JS
      Begin Experiment:
        ##Set Dependencies
        #stims (x5)
        all_kaleidos = glob(os.getcwd() + '/kaleido_img/*jpg') #import all images to be used
        all_kaleidos = np.random.permutation(all_kaleidos) #randomize order to grab different images each time
        task_kaleidos = all_kaleidos[15:] #all remaining for actual task runs
        #object (x4)
        all_objects = glob(os.getcwd() + '/object_img/*jpg')
        all_objects = np.random.permutation(all_objects)
        task_objects = all_objects[12:]
        #scene (x1)
        all_scenes = glob(os.getcwd() + '/scene_img/*jpg')
        all_scenes = np.random.permutation(all_scenes)
        task_scenes = all_scenes[3:]
        #face (x1)
        all_faces = glob(os.getcwd() + '/face_img/*/*bmp')
        all_faces = np.random.permutation(all_faces)
        task_faces = all_faces[3:]

        all_kaleido_sets = []
        all_object_sets = []
        all_scene_sets = []
        all_face_sets = []
        for set in range(2):
            kaleido_stimset = task_kaleidos[set:30:5]
            object_stimset = task_objects[set:24:4]
            scene_stimset = task_scenes[set:60:3]
            face_stimset = task_faces[set:60:3]
            all_kaleido_sets.append(kaleido_stimset)
            all_object_sets.append(object_stimset)
            all_scene_sets.append(scene_stimset)
            all_face_sets.append(face_stimset)
      Begin Routine:
        kaleido_stims = all_kaleido_sets[loop_num] #kaleidoscopic images to be used in current set
        object_stims = all_object_sets[loop_num] #object images to be used in current set
        scene_stim = all_scene_sets[loop_num] #scene images to be used in current set
        face_stim = all_face_sets[loop_num] #face images to be used in current set

        current_run = 'run_1'
        # checks the trial order to make sure its balanced
        success = False
        while success == False:
            faces = 0
            run_schedule = run_trialorder()
            for i, item in enumerate(run_schedule):
                if i != 179:
                    if item in [0,2] and run_schedule[i+1] == -1:
                        faces += 1
            if faces >= 12 and faces <= 18:
                success = True
      End Routine:
        expClock.reset()
  Routine instructions
    ImageComponent bkg_instructions
      color = $[-0.5,-0.5,-0.5]
      size = (2, 2)
      startVal [time (s)] = 0.0
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    TextComponent text_instructions
      font = Ariel
      letterHeight = 0.08
      startVal [time (s)] = 0.0
      wrapWidth = 1.5
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      text:
        The experiment will begin soon.
        Please remain still and wait for the scanner to start.
    KeyboardComponent start_key
      allowedKeys = 'space', '5'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_instructions
      Code Type = Py
      Begin Experiment:
        expClock = core.Clock() #begins clock

        import os
        import numpy as np
        from numpy.random import random, randint, normal, shuffle
        import random
        from math import ceil
        from glob import glob

        def fixed(v): #function to isolate fixed trials
            return v >= 0 and v < 4

        def run_trialorder(): #function to create pseudo-random trial schedule for each run
            dummy_types = [0,1,2,3]*25 + [4]*50 + [-1]*30  #-1 = baseline, 0-3 = fixed, 4 = conditional
            rand_dummies = np.random.permutation(dummy_types) #creates random trial order
            i = 0 #loop counter
            while i < len(rand_dummies[:-1]): #while loop num is less than length of 1 less than total number of trials
                v = rand_dummies[i] #trial type at current index within randomized trial order
                v2 = rand_dummies[i+1] #trial type at next index
                if (v2 >= 4 and v >= 4) or (i == 0 and (v >=4 or v == -1)) or (v == -1 and (v2 == -1 or v2 >= 4)) or (v >= 4 and v2 == -1):
                    #Triggering conditions for pseudo-randomization:
                        #1 - next and current trial are conditional
                        #2 - first index AND current trial is conditional or baseline
                        #3 - current trial is baseline AND next trial is baseline or conditional
                        #4 - current trial is conditional and next trial is baseline
                    for j, safe_val in enumerate(rand_dummies): #if current-next trial pairs trigger conditionals above, enumerate through randomized trial order to locate two adjacent fixed trials
                        v0 = None #value preceding current index (j)
                        safe_v2 = None #value following current index (j)
                        if j+1 != len(rand_dummies): #if not the second to last value in rand_dummies
                            safe_v2 = rand_dummies[j+1] #safe_v2 is the value of the following index
                            if fixed(safe_v2) and fixed(safe_val): #if both current and following trials are fixed
                                #it's easiest to inject conditional or BL trials between two fixed trials because there are so many
                                #switches current triggered trial with first fixed trial
                                temp = rand_dummies[j]
                                rand_dummies[j] = rand_dummies[i]
                                rand_dummies[i] = temp
                                i = -1
                                break
                        if j > 0: #if not the first value
                            v0 = rand_dummies[j-1]
                            if fixed(v0) and fixed(safe_val):
                                temp = rand_dummies[j]
                                rand_dummies[j] = rand_dummies[i]
                                rand_dummies[i] = temp
                                i = -1
                                break
                i += 1
            return rand_dummies

        #function to place object images on sides
        def sides_assign(corr_img, incorr_img):
            rand_side = np.random.permutation([1,2]) #randomize correct response button at the first index
            curr_corr = rand_side[0] #correct response based on side
            if curr_corr == 1: #if correct side is left
                left_box_img = corr_img
                right_box_img = incorr_img
            else: #if correct side is right (corr_resp == 2)
                left_box_img = incorr_img
                right_box_img = corr_img
            return left_box_img, right_box_img, curr_corr

        ##Set Dependencies
        #stims (x5)
        all_kaleidos = glob(os.getcwd() + '/kaleido_img/*jpg') #import all images to be used
        all_kaleidos = np.random.permutation(all_kaleidos) #randomize order to grab different images each time
        #practice_kaleidos = all_kaleidos[:15] #5 for practice run
        task_kaleidos = all_kaleidos[15:] #all remaining for actual task runs
        #object (x4)
        all_objects = glob(os.getcwd() + '/object_img/*jpg')
        all_objects = np.random.permutation(all_objects)
        #practice_objects = all_objects[:12] # 4 object images for practice run
        task_objects = all_objects[12:]
        #scene (x1)
        all_scenes = glob(os.getcwd() + '/scene_img/*jpg')
        all_scenes = np.random.permutation(all_scenes)
        #practice_scene = all_scenes[0] # 1 scene for practice choice
        task_scenes = all_scenes[3:]
        #face (x1)
        all_faces = glob(os.getcwd() + '/face_img/*jpg')
        all_faces = np.random.permutation(all_faces)
        #practice_face = all_faces[0] # 1 face for practice choice
        task_faces = all_faces[3:]

        trialbox_color = 'gray'
        color_1 = color_2 = trialbox_color
        stim_opacity = 0
      End Routine:
        expClock.reset() #rests clock at the end of instructions
Flow
  Routine instructions
  LoopInitiator set_loop loopType="TrialHandler"
    conditionsFile = loop_schedule2.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [OrderedDict([('loop_num', 0)]),
      OrderedDict([('loop_num', 1)])]
    Routine stim_prep
    Routine delay_init
    LoopInitiator run_1 loopType="TrialHandler"
      loopType = sequential
      nReps = 180
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      Routine trial
      Routine feedback
    LoopTerminator run_1
    Routine delay_end
    Routine run_break
    Routine delay_init
    LoopInitiator run_2 loopType="TrialHandler"
      loopType = sequential
      nReps = 180
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      Routine trial
      Routine feedback
    LoopTerminator run_2
    Routine delay_end
    Routine set_break
  LoopTerminator set_loop
